#-- scenario file --#
scenario = "AVT at 7 tesla";

# --------------------------------------------------- #
# 								HEADER 								#
# --------------------------------------------------- #
pcl_file = "AVT_fMRI_EyeTrack.pcl";

#scenario_type = fMRI;
scenario_type = fMRI_emulation;
scan_period = 3000;

pulse_code = 30;
pulses_per_scan = 1;


default_text_color = 255,255,255; #white text by default
default_background_color = 128,128,128; #grey background

default_text_align = align_center;
default_font = "Arial"; #Arial font by default
default_font_size = 24; 


response_matching = simple_matching;
response_logging = log_all;


active_buttons = 2;
button_codes = 1, 2;


default_stimulus_time_in = 0;
default_stimulus_time_out = never;
default_clear_active_stimuli = false;


# --------------------------------------------------- #
#					           SDL									#
# --------------------------------------------------- #
begin;

# SDL variables

# VISUAL HARDWARE
$RefreshRate = 60.0;

#Compute the number of pixel per degree
$MaxFOV = 39.0;  #2.0 * 180.0 * arctan(MonitorWidth/2.0/ViewDist)/ Pi;
$Win_W = 1024.0 ;
$Win_H = 728.0 ; 
$PPD = '$Win_W/$MaxFOV';

# for ViewDist = 30
# MonWidth	MaxFOV
# 48.0		77
# 37			63
# 29			52
# 21.5		40

# for ViewDist = 50
# MonWidth	MaxFOV
# 48.0		51

# for ViewDist = 54
# MonWidth	MaxFOV
# 51			50
# 38			38.75

# for ViewDist = 60
# MonWidth	MaxFOV
# 33.0		31
# 37			34

# for ViewDist = 160
# MonWidth	MaxFOV
# 39.0		40

# Colors
$Black = "0, 0, 0";
$White = "255, 255, 255";
$Grey = "128, 128, 128";
$Blue = "0, 0, 255";
$Green = "0, 255, 0";
$Red = "255, 0, 0";

# Position
$xpos = 0;
$ypos = 0;

# Stimuli timing
$ISI = 1400;
$Stimulus_Duration = 200; # ms
$Pre_Stimulus_Duration = 50;
$Post_Stimulus_Duration = 700;

# Fixation Cross
$FixationCrossLineWidth = 2;
$FixationCrossHalfWidth = 8;
$NegativeFixationCrossHalfWidth = '-($FixationCrossHalfWidth)';

# Dots
$Dot_Size = 3.0;
$Dot_Size_Pixel = '$Dot_Size * $PPD';
$Dot_Color = $White;

# Fixation
$FinalFixationDuration = 1000.0;
$Fixation_Duration = 7000.0;

#------------------#
# STIMULI ELEMENTS #
#------------------#

# VISUAL
# Blue Fixation Cross
line_graphic {
	coordinates = $NegativeFixationCrossHalfWidth, 0, $FixationCrossHalfWidth, 0;
	coordinates = 0, $NegativeFixationCrossHalfWidth, 0, $FixationCrossHalfWidth;
	line_width = $FixationCrossLineWidth;
	line_color = $Blue;
}BlueFixationCross;

# Single Dot
ellipse_graphic {
	ellipse_width = $Dot_Size_Pixel;
	ellipse_height = $Dot_Size_Pixel;
	color = $Dot_Color;
}Dot;

# Dots
array{
ellipse_graphic {ellipse_width = $Dot_Size_Pixel; ellipse_height = $Dot_Size_Pixel; color = $Dot_Color; } Dot_1;
} DOTS_ARRAY;

# AUDIO
sound { 
	wavefile { filename = "quiet sequence.wav"; };
	loop_playback = true;
} EPI;

# Sounds
array{
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_200ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_200ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_200ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_200ms_Location_12_Deg_10_Rep    ;
} SOUNDS200;

array{
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_1_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_1_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_1_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_1_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_1_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_1_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_1_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_1_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_1_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_1_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_2_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_2_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_2_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_2_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_2_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_2_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_2_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_2_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_2_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_2_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_3_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_3_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_3_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_3_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_3_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_3_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_3_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_3_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_3_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_3_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_4_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_4_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_4_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_4_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_4_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_4_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_4_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_4_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_4_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_4_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_5_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_5_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_5_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_5_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_5_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_5_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_5_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_5_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_5_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_5_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_6_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_6_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_6_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_6_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_6_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_6_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_6_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_6_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_6_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_6_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_7_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_7_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_7_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_7_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_7_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_7_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_7_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_7_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_7_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_7_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_8_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_8_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_8_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_8_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_8_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_8_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_8_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_8_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_8_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_8_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_9_Rep.wav "; } ; } Target_200ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_9_Rep.wav "; } ; } Target_200ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_9_Rep.wav  "; } ; } Target_200ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_9_Rep.wav  "; } ; } Target_200ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_9_Rep.wav  "; } ; } Target_200ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_9_Rep.wav  "; } ; } Target_200ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_9_Rep.wav  "; } ; } Target_200ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_9_Rep.wav     "; } ; } Target_200ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_9_Rep.wav    "; } ; } Target_200ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_9_Rep.wav    "; } ; } Target_200ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_min12_Deg_10_Rep.wav"; } ; } Target_200ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Target_200ms_Location_min10_Deg_10_Rep.wav"; } ; } Target_200ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Target_200ms_Location_min8_Deg_10_Rep.wav "; } ; } Target_200ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min5_Deg_10_Rep.wav "; } ; } Target_200ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min4_Deg_10_Rep.wav "; } ; } Target_200ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min3_Deg_10_Rep.wav "; } ; } Target_200ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_min1_Deg_10_Rep.wav "; } ; } Target_200ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Target_200ms_Location_0_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_1_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_3_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_4_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_5_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_8_Deg_10_Rep.wav    "; } ; } Target_200ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Target_200ms_Location_10_Deg_10_Rep.wav   "; } ; } Target_200ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Target_200ms_Location_12_Deg_10_Rep.wav   "; } ; } Target_200ms_Location_12_Deg_10_Rep    ;
} TARGETS200;

array{
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_100ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_100ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_100ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_100ms_Location_12_Deg_10_Rep    ;
} SOUNDS100;

array{
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_1_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_1_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_1_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_1_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_1_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_1_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_1_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_1_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_1_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_1_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_2_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_2_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_2_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_2_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_2_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_2_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_2_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_2_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_2_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_2_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_3_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_3_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_3_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_3_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_3_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_3_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_3_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_3_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_3_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_3_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_4_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_4_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_4_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_4_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_4_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_4_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_4_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_4_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_4_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_4_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_5_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_5_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_5_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_5_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_5_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_5_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_5_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_5_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_5_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_5_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_6_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_6_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_6_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_6_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_6_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_6_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_6_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_6_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_6_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_6_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_7_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_7_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_7_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_7_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_7_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_7_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_7_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_7_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_7_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_7_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_8_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_8_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_8_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_8_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_8_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_8_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_8_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_8_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_8_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_8_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_9_Rep.wav "; } ; } Target_100ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_9_Rep.wav "; } ; } Target_100ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_9_Rep.wav  "; } ; } Target_100ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_9_Rep.wav  "; } ; } Target_100ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_9_Rep.wav  "; } ; } Target_100ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_9_Rep.wav  "; } ; } Target_100ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_9_Rep.wav  "; } ; } Target_100ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_9_Rep.wav     "; } ; } Target_100ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_9_Rep.wav    "; } ; } Target_100ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_9_Rep.wav    "; } ; } Target_100ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_min12_Deg_10_Rep.wav"; } ; } Target_100ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Target_100ms_Location_min10_Deg_10_Rep.wav"; } ; } Target_100ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Target_100ms_Location_min8_Deg_10_Rep.wav "; } ; } Target_100ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min5_Deg_10_Rep.wav "; } ; } Target_100ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min4_Deg_10_Rep.wav "; } ; } Target_100ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min3_Deg_10_Rep.wav "; } ; } Target_100ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_min1_Deg_10_Rep.wav "; } ; } Target_100ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Target_100ms_Location_0_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_1_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_3_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_4_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_5_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_8_Deg_10_Rep.wav    "; } ; } Target_100ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Target_100ms_Location_10_Deg_10_Rep.wav   "; } ; } Target_100ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Target_100ms_Location_12_Deg_10_Rep.wav   "; } ; } Target_100ms_Location_12_Deg_10_Rep    ;
} TARGETS100;

array{
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_80ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_80ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_80ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_80ms_Location_12_Deg_10_Rep    ;
} SOUNDS80;

array{
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_1_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_1_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_1_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_1_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_1_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_1_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_1_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_1_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_1_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_1_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_2_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_2_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_2_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_2_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_2_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_2_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_2_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_2_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_2_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_2_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_3_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_3_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_3_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_3_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_3_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_3_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_3_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_3_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_3_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_3_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_4_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_4_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_4_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_4_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_4_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_4_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_4_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_4_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_4_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_4_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_5_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_5_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_5_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_5_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_5_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_5_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_5_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_5_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_5_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_5_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_6_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_6_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_6_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_6_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_6_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_6_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_6_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_6_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_6_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_6_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_7_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_7_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_7_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_7_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_7_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_7_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_7_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_7_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_7_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_7_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_8_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_8_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_8_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_8_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_8_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_8_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_8_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_8_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_8_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_8_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_9_Rep.wav "; } ; } Target_80ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_9_Rep.wav "; } ; } Target_80ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_9_Rep.wav  "; } ; } Target_80ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_9_Rep.wav  "; } ; } Target_80ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_9_Rep.wav  "; } ; } Target_80ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_9_Rep.wav  "; } ; } Target_80ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_9_Rep.wav  "; } ; } Target_80ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_9_Rep.wav     "; } ; } Target_80ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_9_Rep.wav    "; } ; } Target_80ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_9_Rep.wav    "; } ; } Target_80ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_min12_Deg_10_Rep.wav"; } ; } Target_80ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Target_80ms_Location_min10_Deg_10_Rep.wav"; } ; } Target_80ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Target_80ms_Location_min8_Deg_10_Rep.wav "; } ; } Target_80ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min5_Deg_10_Rep.wav "; } ; } Target_80ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min4_Deg_10_Rep.wav "; } ; } Target_80ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min3_Deg_10_Rep.wav "; } ; } Target_80ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_min1_Deg_10_Rep.wav "; } ; } Target_80ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Target_80ms_Location_0_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_1_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_3_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_4_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_5_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_8_Deg_10_Rep.wav    "; } ; } Target_80ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Target_80ms_Location_10_Deg_10_Rep.wav   "; } ; } Target_80ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Target_80ms_Location_12_Deg_10_Rep.wav   "; } ; } Target_80ms_Location_12_Deg_10_Rep    ;
} TARGETS80;

array{
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_50ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_50ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_50ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_50ms_Location_12_Deg_10_Rep    ;
} SOUNDS50;

array{
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_1_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_1_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_1_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_1_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_1_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_1_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_1_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_1_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_1_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_1_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_2_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_2_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_2_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_2_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_2_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_2_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_2_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_2_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_2_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_2_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_3_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_3_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_3_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_3_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_3_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_3_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_3_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_3_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_3_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_3_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_4_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_4_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_4_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_4_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_4_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_4_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_4_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_4_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_4_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_4_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_5_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_5_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_5_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_5_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_5_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_5_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_5_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_5_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_5_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_5_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_6_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_6_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_6_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_6_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_6_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_6_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_6_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_6_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_6_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_6_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_7_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_7_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_7_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_7_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_7_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_7_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_7_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_7_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_7_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_7_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_8_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_8_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_8_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_8_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_8_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_8_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_8_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_8_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_8_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_8_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_9_Rep.wav "; } ; } Target_50ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_9_Rep.wav "; } ; } Target_50ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_9_Rep.wav  "; } ; } Target_50ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_9_Rep.wav  "; } ; } Target_50ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_9_Rep.wav  "; } ; } Target_50ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_9_Rep.wav  "; } ; } Target_50ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_9_Rep.wav  "; } ; } Target_50ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_9_Rep.wav     "; } ; } Target_50ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_9_Rep.wav    "; } ; } Target_50ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_9_Rep.wav    "; } ; } Target_50ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_min12_Deg_10_Rep.wav"; } ; } Target_50ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Target_50ms_Location_min10_Deg_10_Rep.wav"; } ; } Target_50ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Target_50ms_Location_min8_Deg_10_Rep.wav "; } ; } Target_50ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min5_Deg_10_Rep.wav "; } ; } Target_50ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min4_Deg_10_Rep.wav "; } ; } Target_50ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min3_Deg_10_Rep.wav "; } ; } Target_50ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_min1_Deg_10_Rep.wav "; } ; } Target_50ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Target_50ms_Location_0_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_1_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_3_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_4_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_5_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_8_Deg_10_Rep.wav    "; } ; } Target_50ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Target_50ms_Location_10_Deg_10_Rep.wav   "; } ; } Target_50ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Target_50ms_Location_12_Deg_10_Rep.wav   "; } ; } Target_50ms_Location_12_Deg_10_Rep    ;
} TARGETS50;

#---------#
# STIMULI #
#---------#
picture {
	} 
	Default;

picture {
	ellipse_graphic Dot_1; 	x = $xpos; y = $ypos;
	
	line_graphic BlueFixationCross;
	x = $xpos; y = $ypos;
} Dots;


picture {
	line_graphic BlueFixationCross;
	x = $xpos; y = $ypos;
} PictureBlueFixationCross;


#--------#
# TRIALS #
#--------#
#START
trial {	
	monitor_sounds = false;
	nothing {};
	mri_pulse = 1;
	picture PictureBlueFixationCross;
	code = "Start";
} Start_Trial;

#ISI
trial {
	monitor_sounds = false;
	all_responses = true;
	trial_duration = $ISI;
	
	picture PictureBlueFixationCross;
	time = 0;
	
	code = "ISI";
} ISI;


# TRIALS
# VisualOnly_Trial;
trial {
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;

	stimulus_event {
		picture Dots;
		time = $Pre_Stimulus_Duration;
		duration = $Stimulus_Duration;
		code = "VisualOnly_Trial";
	} Dots_V;
	
	stimulus_event {
		picture PictureBlueFixationCross;
		delta_time = $Stimulus_Duration;
		duration = $Post_Stimulus_Duration;
	} PostStimFix_V;

} VisualOnly_Trial;


# AudioOnly_Trial;
trial {
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;
	
	stimulus_event {
      sound Target_50ms_Location_12_Deg_10_Rep;
		time = $Pre_Stimulus_Duration;
		code = "AudioOnly_Trial_A";
   } SoundOnly;

	stimulus_event {
		picture PictureBlueFixationCross;
		time = $Pre_Stimulus_Duration;
		duration = '$Stimulus_Duration+$Post_Stimulus_Duration';
	} PostStimFix_A;
	
} AudioOnly_Trial;


# Tactile_Trial;
trial {
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration; 
		
	picture PictureBlueFixationCross;
	code = "Tactile_Trial";
	time = $Pre_Stimulus_Duration;
} Tactile_Trial;



#TARGETS
# VisualOnly_Target;
trial {
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;

	stimulus_event {
		picture Dots;
		time = $Pre_Stimulus_Duration;
		duration = $Stimulus_Duration;
		code = "VisualOnly_Target";
	} Dot_Target_1;	
	
	stimulus_event {
		picture PictureBlueFixationCross;
		delta_time = $Stimulus_Duration;
		duration = $Stimulus_Duration;
	} Inter_Dot;
	
	stimulus_event {
		picture Dots;
		delta_time = $Stimulus_Duration;
		duration = $Stimulus_Duration;
		target_button = 1;		
	} Dot_Target_2;
	
	stimulus_event {
		picture PictureBlueFixationCross;
		delta_time = $Stimulus_Duration;
		duration = $Post_Stimulus_Duration;
	} PostStimFix_V_Target;

} VisualOnly_Target;


# AudioOnly_Target;
trial {
	monitor_sounds = false;
	all_responses = true;

	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;

	stimulus_event {
      sound Target_50ms_Location_12_Deg_10_Rep;
		time = $Pre_Stimulus_Duration;
		code = "AudioOnly_Target_A";
   } Sound_Target1;
	
	stimulus_event {
      sound Target_50ms_Location_12_Deg_10_Rep;
		time = '$Pre_Stimulus_Duration+$Stimulus_Duration*2';
		target_button = 1;
   } Sound_Target2;
	
	stimulus_event {
		picture PictureBlueFixationCross;
		time = $Pre_Stimulus_Duration;
		duration = '$Stimulus_Duration*3+$Post_Stimulus_Duration';
	} PostStimFix_A_Target;

} AudioOnly_Target;


# Tactile_Target;
trial {	
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;

	stimulus_event {
		picture PictureBlueFixationCross;
		code = "Tactile_Target";
		time = $Pre_Stimulus_Duration;
		target_button = 1;
	} Tactile_Target_Event;
	
} Tactile_Target;


##CONFIRMATION AT START
trial {
	all_responses = true;
   trial_duration = forever;
   trial_type = specific_response;
   terminator_button = 2;   
	
	picture {
		text {
			caption = "Press ENTER to start.";
		}ConfirmationTxt;
		x = 0; y = 0;
	};
} Confirmation;


##EYETRACKER INFO
trial {
	all_responses = true;
   trial_duration = forever;
   trial_type = specific_response;
   terminator_button = 2;   
	
	picture {
		text {
			caption = "Press ENTER to start.";
		}EyeTrackTxt;
		x = 0; y = 0;
	} EyeTracPic;
} EyeTrackScreen;


# FIXATIONS
# Fixation
trial {
	monitor_sounds = false;
	all_responses = true;
	trial_duration = 'int($Fixation_Duration)';
	
	picture PictureBlueFixationCross;
	
	code = "Fixation";
	
	save_logfile {
      filename = "temp.log"; # use temp.log in default logfile directory
   };
} Fixation;


# Final Fixation
trial {
	all_responses = true;
   trial_duration = 'int($FinalFixationDuration)';
	
	picture PictureBlueFixationCross;
	
	code = "Final_Fixation";
} Final_Fixation;