#-- scenario file --#
scenario = "Auditory localization: psychophysics";

# --------------------------------------------------- #
# 								HEADER 								#
# --------------------------------------------------- #
pcl_file = "AudioLoc_PsyPhy.pcl";

scenario_type = trials;

default_text_color = 255,255,255; #white text by default
default_background_color = 128,128,128; #grey background

default_text_align = align_center;
default_font = "Arial"; #Arial font by default
default_font_size = 24; 


response_matching = simple_matching;
response_logging = log_all;


active_buttons = 5;
button_codes = 1, 2, 3, 4, 5;


default_stimulus_time_in = 0;
default_stimulus_time_out = never;
default_clear_active_stimuli = false;


# --------------------------------------------------- #
#					           SDL									#
# --------------------------------------------------- #
begin;

# SDL variables

# VISUAL HARDWARE
$RefreshRate = 60.0;

#Compute the number of pixel per degree
$MaxFOV = 38.75;  #2.0 * 180.0 * arctan(MonitorWidth/2.0/ViewDist)/ Pi;
$Win_W = 1024.0 ;
$Win_H = 728.0 ; 
$PPD = '$Win_W/$MaxFOV';

# for ViewDist = 30
# MonWidth	MaxFOV
# 48.0		77
# 37			63
# 29			52
# 21.5		40

# for ViewDist = 50
# MonWidth	MaxFOV
# 48.0		51

# for ViewDist = 54
# MonWidth	MaxFOV
# 51			50
# 38			38.75

# for ViewDist = 60
# MonWidth	MaxFOV
# 33.0		31
# 37			34
# 51			46

# Colors
$Black = "0, 0, 0";
$White = "255, 255, 255";
$Grey = "128, 128, 128";
$Blue = "0, 0, 255";
$Green = "0, 255, 0";
$Red = "255, 0, 0";

# Position
$xpos = 0;
$ypos = 0;

# Stimuli timing
$ISI = 1400;
$Stimulus_Duration = 200; # ms
$Pre_Stimulus_Duration = 500;
$Post_Stimulus_Duration = 250;
$Feedback_Duration = 400;

# Fixation Cross
$FixationCrossLineWidth = 2;
$FixationCrossHalfWidth = 8;
$NegativeFixationCrossHalfWidth = '-($FixationCrossHalfWidth)';

# Feedback
$Feedback_Size = 1;
$Feedback_Size_Pixel = '$Feedback_Size * $PPD';
$PositiveFeedback_Color = $Green;
$NegativeFeedback_Color = $Red;

# Fixation
$FinalFixationDuration = 3000.0;


#------------------#
# STIMULI ELEMENTS #
#------------------#

# VISUAL
# Blue Fixation Cross
line_graphic {
	coordinates = $NegativeFixationCrossHalfWidth, 0, $FixationCrossHalfWidth, 0;
	coordinates = 0, $NegativeFixationCrossHalfWidth, 0, $FixationCrossHalfWidth;
	line_width = $FixationCrossLineWidth;
	line_color = $Blue;
}BlueFixationCross;

# Positive Feedback
ellipse_graphic {
	ellipse_width = $Feedback_Size_Pixel;
	ellipse_height = $Feedback_Size_Pixel;
	color = $PositiveFeedback_Color;
}PositiveFeedbackDot;

#Negative Feedback
ellipse_graphic {
	ellipse_width = $Feedback_Size_Pixel;
	ellipse_height = $Feedback_Size_Pixel;
	color = $NegativeFeedback_Color;
}NegativeFeedbackDot;


# AUDIO
sound { 
	wavefile { filename = "quiet sequence.wav"; };
	loop_playback = true;
} EPI;


# Sounds
array{
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_200ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_200ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_200ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_200ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_200ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_200ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_200ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_200ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_200ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_200ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_200ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_200ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_200ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_200ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_200ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_200ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_200ms_Location_12_Deg_10_Rep    ;
} SOUNDS200;

array{
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_100ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_100ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_100ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_100ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_100ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_100ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_100ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_100ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_100ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_100ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_100ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_100ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_100ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_100ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_100ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_100ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_100ms_Location_12_Deg_10_Rep    ;
} SOUNDS100;

array{
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_80ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_80ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_80ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_80ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_80ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_80ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_80ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_80ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_80ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_80ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_80ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_80ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_80ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_80ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_80ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_80ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_80ms_Location_12_Deg_10_Rep    ;
} SOUNDS80;

array{
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_1_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_1_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_1_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_1_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_1_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_1_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_1_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_1_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_1_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_1_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_2_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_2_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_2_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_2_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_2_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_2_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_2_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_2_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_2_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_2_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_3_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_3_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_3_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_3_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_3_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_3_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_3_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_3_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_3_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_3_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_4_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_4_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_4_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_4_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_4_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_4_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_4_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_4_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_4_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_4_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_5_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_5_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_5_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_5_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_5_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_5_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_5_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_5_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_5_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_5_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_6_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_6_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_6_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_6_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_6_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_6_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_6_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_6_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_6_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_6_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_7_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_7_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_7_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_7_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_7_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_7_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_7_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_7_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_7_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_7_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_8_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_8_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_8_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_8_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_8_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_8_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_8_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_8_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_8_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_8_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_9_Rep.wav "; } ; } Sound_50ms_Location_min12_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_9_Rep.wav "; } ; } Sound_50ms_Location_min10_Deg_9_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min8_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min5_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min4_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min3_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_9_Rep.wav  "; } ; } Sound_50ms_Location_min1_Deg_9_Rep   ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_0_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_1_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_3_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_4_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_5_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_9_Rep.wav     "; } ; } Sound_50ms_Location_8_Deg_9_Rep      ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_9_Rep.wav    "; } ; } Sound_50ms_Location_10_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_9_Rep.wav    "; } ; } Sound_50ms_Location_12_Deg_9_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_min12_Deg_10_Rep.wav"; } ; } Sound_50ms_Location_min12_Deg_10_Rep ;
sound {wavefile { filename = "Sound_50ms_Location_min10_Deg_10_Rep.wav"; } ; } Sound_50ms_Location_min10_Deg_10_Rep ;
sound {wavefile { filename = "Sound_50ms_Location_min8_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min8_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min5_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min5_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min4_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min4_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min3_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min3_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_min1_Deg_10_Rep.wav "; } ; } Sound_50ms_Location_min1_Deg_10_Rep  ;
sound {wavefile { filename = "Sound_50ms_Location_0_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_0_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_1_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_1_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_3_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_3_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_4_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_4_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_5_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_5_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_8_Deg_10_Rep.wav    "; } ; } Sound_50ms_Location_8_Deg_10_Rep     ;
sound {wavefile { filename = "Sound_50ms_Location_10_Deg_10_Rep.wav   "; } ; } Sound_50ms_Location_10_Deg_10_Rep    ;
sound {wavefile { filename = "Sound_50ms_Location_12_Deg_10_Rep.wav   "; } ; } Sound_50ms_Location_12_Deg_10_Rep    ;
} SOUNDS50;

#---------#
# STIMULI #
#---------#
picture {
	line_graphic BlueFixationCross;
	x = $xpos; y = $ypos;
} PictureBlueFixationCross;


picture {
	ellipse_graphic PositiveFeedbackDot;
	x = $xpos; y = $ypos;
	
	line_graphic BlueFixationCross;
	x = $xpos; y = $ypos;
} PicturePositiveFeedback;


picture {
	ellipse_graphic NegativeFeedbackDot;
	x = $xpos; y = $ypos;
	
	line_graphic BlueFixationCross;
	x = $xpos; y = $ypos;
} PictureNegativeFeedback;



#--------#
# TRIALS #
#--------#
#ISI
trial {
	monitor_sounds = false;
	all_responses = true;
	trial_duration = $ISI;
	
	picture PictureBlueFixationCross;
	time = 0;
	
	code = "ISI";
} ISI;


# TRIALS
# AudioOnly_Trial;
trial {
	monitor_sounds = false;
	all_responses = true;
	
	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;
	
	stimulus_event {
      sound Sound_50ms_Location_12_Deg_10_Rep;
		time = $Pre_Stimulus_Duration;
		code = "AudioOnly_Trial_A";
   } SoundOnly;

	stimulus_event {
		picture PictureBlueFixationCross;
		time = $Pre_Stimulus_Duration;
		duration = '$Stimulus_Duration+$Post_Stimulus_Duration';
	} PostStimFix_A;
	
} AudioOnly_Trial;

#RESPONSES
# Auditory location
trial {
	monitor_sounds = false;
	all_responses = true;
   trial_duration = forever;
   trial_type = specific_response;
   terminator_button = 1, 2, 3, 4; 

	picture PictureBlueFixationCross;
	time = 0; 
	duration = $Pre_Stimulus_Duration;
	
	stimulus_event {
		picture PictureBlueFixationCross;
		time = $Pre_Stimulus_Duration;
		code = "AuditoryLocation";
	} AudLocEvent;
	
} AuditoryLocation;


# FEEDBACK
# Positive feedback;
trial {
	monitor_sounds = false;
	all_responses = false;
	trial_duration = $Feedback_Duration;
	
	picture PicturePositiveFeedback;
	
	code = "PositiveFeeback";
} PositiveFeedback;

# Negative feedback;
trial {
	monitor_sounds = false;
	all_responses = false;
	trial_duration = $Feedback_Duration;
	
	picture PictureNegativeFeedback;
	
	code = "NegativeFeeback";
} NegativeFeedback;


##CONFIRMATION AT START
trial {
	all_responses = true;
   trial_duration = forever;
   trial_type = specific_response;
   terminator_button = 5;   
	
	picture {
		text {
			caption = "Press ENTER to start.";
		}ConfirmationTxt;
		x = 0; y = 0;
	};
} Confirmation;


##BREAK
trial {
	monitor_sounds = false;
	all_responses = true;
   trial_duration = forever;
   trial_type = specific_response;
   terminator_button = 5;   
	
	stimulus_event {
	picture {
		text {
			caption = "Take a break!\n\n\nPress ENTER to start the fun again.";
		};
		x = 0; y = 0;
	} ;

	code = "BREAK";
	} BreakEvent;
} Break;



# FIXATIONS
# Final Fixation
trial {
	all_responses = true;
   trial_duration = 'int($FinalFixationDuration)';
	
	picture PictureBlueFixationCross;
	
	code = "Final_Fixation";
} Final_Fixation;